WorkflowBuilder(Version=2.2.2)
Bonsai.Shaders.UpdateFrame => #3
-> Bonsai.Physics.CreateWorld(Gravity(X=0, Y=0, Z=-9.8), StepSize=0.016, Cfm=1E-10, Erp=0.2)
-> ReplaySubject World(BufferSize=1)
#3 -> Bonsai.Physics.Collision.CreateHashSpace
  MaxContacts=10
  ExcludeConnected=true
  CollisionHandlers
    CollisionHandler
      Material1=Rock
      Material2=Rock
      CollisionSurface
        Mode=Bounce
        Mu=10
        Mu2=0
        Rho=0
        Rho2=0
        RhoN=0
        Bounce=0.1
        BounceVelocity=0
        SoftErp=0
        SoftCfm=0
        Motion1=0
        Motion2=0
        MotionN=0
        Slip1=0
        Slip2=0
    CollisionHandler
      Material1=Rock
      Material2=Ray
      CollisionSurface
        Mode="SoftErp SoftCfm"
        Mu=0
        Mu2=0
        Rho=0
        Rho2=0
        RhoN=0
        Bounce=0
        BounceVelocity=0
        SoftErp=0.04
        SoftCfm=0.7
        Motion1=0
        Motion2=0
        MotionN=0
        Slip1=0
        Slip2=0
-> ReplaySubject Space(BufferSize=nil)
-> NestedWorkflow CreateFloor
    Bonsai.Shaders.WindowClosed => #0
    WorkflowInput Source1
    -> Bonsai.Physics.Collision.CreatePlane(Enabled=true, CategoryBits=nil, CollideBits=nil, Material=Rock, Position=nil, Orientation=nil, A=0, B=0, C=1, D=0) => #11
    #11, #0 -> TakeUntil
    -> WorkflowOutput

    Bonsai.Shaders.UpdateFrame
    -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #5
    SubscribeSubject ViewProj => #7
    #5, #7 -> CombineLatest
    -> Multiply
    -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Plane)
    -> Sink
        WorkflowInput Source1
        -> WorkflowOutput

Bonsai.Shaders.Timer(DueTime=PT0S)
-> SelectMany Controller
    Bonsai.Shaders.WindowClosed => #2
    SubscribeSubject Joints => #4
    -> Skip(Count=1)
    -> Take(Count=2) => #12
    -> Condition
        ExternalizedPropertyOfBooleanBooleanProperty Value(MemberName=Value, Value=true)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> SelectMany "Tacit Learning" => #13
        WorkflowInput Source1
        -> ReplaySubject Joint(BufferSize=1)
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> MemberSelector(Selector=Source.Angle)
        -> Scan SelfReference
            ExternalizedPropertyOfDoubleMultiplyBuilder Integral(MemberName=Value, Value=0.98) => #0
            WorkflowInput Source1 => #11
            -> MemberSelector(Selector=Source.Value) => #7
            -> Multiply(Operand=DoubleProperty(Value=-1)) => #15
            #11 -> MemberSelector(Selector=Source.Accumulation) => #8
            #8, #0 -> Multiply(Operand=DoubleProperty(Value=0.98)) => #6
            #6, #7 -> Zip
            -> Subtract => #9
            ExternalizedPropertyOfDoubleProportional Proportional(MemberName=Weight, Value=1.2) => #13
            #9, #13 -> Bonsai.Simulation.Control.Proportional(Weight=1.2) => #3
            ExternalizedPropertyOfDoubleDerivative Derivative(MemberName=Weight, Value=40) => #14
            #14, #15 -> Bonsai.Simulation.Control.Derivative(Weight=40, StepSize=0.016) => #4
            #3, #4 -> Zip
            -> Add
            -> Multiply(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Divide(Operand=DoubleProperty(Value=1)) => #10
        SubscribeSubject Joint => #9
        #10, #9 -> CombineLatest
        -> Sink AddTorque
            WorkflowInput Source1
            -> InputMapping(Selector=Source.Item2, Torque(selector=Source.Item1))
            -> Bonsai.Simulation.Control.AddHingeTorque(Torque=-1.3084787835464433)
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1)
        -> WorkflowOutput
    #12 -> Condition
        ExternalizedPropertyOfBooleanBooleanProperty Value(MemberName=Value, Value=false)
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> SelectMany "PID Control" => #14
        WorkflowInput Source1
        -> ReplaySubject Joint(BufferSize=1)
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> MemberSelector(Selector=Source.Angle) => #3
        -> Multiply(Operand=DoubleProperty(Value=-1))
        -> Bonsai.Simulation.Control.Derivative(Weight=20, StepSize=0.016) => #13
        SubscribeSubject Joint => #16
        ExternalizedPropertyOfSingleFloatProperty Reference(MemberName=Value, Value=0)
        -> FloatProperty(Value=0) => #8
        #8, #3 -> CombineLatest
        -> Subtract => #10
        -> Bonsai.Simulation.Control.Proportional(Weight=100) => #11
        #10 -> Bonsai.Simulation.Control.Integral(Weight=20, StepSize=0.016) => #12
        #11, #12, #13 -> Zip
        -> Add => #4
        #4, #16 -> CombineLatest
        -> Sink AddTorque
            WorkflowInput Source1
            -> InputMapping(Selector=Source.Item2, Torque(selector=Source.Item1))
            -> Bonsai.Simulation.Control.AddHingeTorque(Torque=-5.8887128703385612)
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1)
        -> WorkflowOutput
    #4 -> Skip(Count=0)
    -> Take(Count=1)
    -> SelectMany "PID Control" => #3
        WorkflowInput Source1
        -> ReplaySubject Joint(BufferSize=1)
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> MemberSelector(Selector=Source.Angle) => #3
        -> Multiply(Operand=DoubleProperty(Value=-1))
        -> Bonsai.Simulation.Control.Derivative(Weight=20, StepSize=0.016) => #13
        SubscribeSubject Joint => #16
        ExternalizedPropertyOfSingleFloatProperty Reference(MemberName=Value, Value=0.8)
        -> FloatProperty(Value=0.8) => #8
        #8, #3 -> CombineLatest
        -> Subtract => #10
        -> Bonsai.Simulation.Control.Proportional(Weight=100) => #11
        #10 -> Bonsai.Simulation.Control.Integral(Weight=20, StepSize=0.016) => #12
        #11, #12, #13 -> Zip
        -> Add => #4
        #4, #16 -> CombineLatest
        -> Sink AddTorque
            WorkflowInput Source1
            -> InputMapping(Selector=Source.Item2, Torque(selector=Source.Item1))
            -> Bonsai.Simulation.Control.AddHingeTorque(Torque=-4.6820562001324566)
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1)
        -> WorkflowOutput
    #3, #13, #14 -> Merge
    -> Bonsai.Dsp.Buffer(Count=2000, Skip=2)
    -> Bonsai.Dsp.Reshape(Channels=0, Rows=1000)
    -> Bonsai.Dsp.Transpose => #7
    #7, #2 -> TakeUntil
    -> WorkflowOutput

Bonsai.Shaders.Timer(DueTime=PT0S)
-> Bonsai.Simulation.Assets.CreateScene(FileName=2dof_flat.blend) => #20
-> Bonsai.Simulation.Assets.GetCameras
-> InputMapping(FovY(selector=Source.FieldOfview), NearClip(selector=Source.ClipPlaneNear), FarClip(selector=Source.ClipPlaneFar))
-> Bonsai.Shaders.CreatePerspectiveFieldOfView(FovY=0.7853982, AspectRatio=1.33333337, NearClip=0.1, FarClip=1000)
-> ReplaySubject Projection(BufferSize=1) => #27
#20 -> Bonsai.Simulation.Assets.GetNodes => #21
-> Condition Camera
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.Name)
    -> Equal(Operand=StringProperty(Value=Camera))
    -> WorkflowOutput
-> MemberSelector(Selector=Source.Transform)
-> Bonsai.Simulation.Assets.ConvertTransform
-> Bonsai.Scripting.PythonTransform
  Script:
    import clr
    clr.AddReference("OpenTK")
    from OpenTK import Matrix4, Vector3

    @returns(Matrix4)
    def process(value):
      value = Matrix4.Invert(value)

      # In blender, forward is Y and up is Z
      position = Vector3.Transform(Vector3.Zero, value)
      direction = Vector3.Transform(Vector3.UnitY, value)
      up = Vector3.Transform(Vector3.UnitZ, value)
      target = position + direction * 1000
      lookat = Matrix4.LookAt(position, target, up)
      return value
-> ReplaySubject View(BufferSize=1) => #8
#8, #27 -> CombineLatest
-> Multiply
-> ReplaySubject ViewProj(BufferSize=1)
#21 -> Condition ObjectNodes
    WorkflowInput Source1 => #1
    -> MemberSelector(Selector=Source.Name) => #0
    -> NotEqual(Operand=StringProperty(Value=Camera)) => #3
    #0 -> NotEqual(Operand=StringProperty(Value=Lamp)) => #4
    #0 -> Bonsai.Scripting.ExpressionTransform => #9
      Expression: !it.Contains(".")
    #1 -> MemberSelector(Selector=Source.Parent)
    -> Bonsai.Scripting.ExpressionTransform => #8
      Expression: it != null
    #3, #4, #8, #9 -> Zip
    -> LogicalAnd
    -> WorkflowOutput
-> SelectMany CreateObject
    WorkflowInput Source1
    -> ReplaySubject Node(BufferSize=1)
    -> MemberSelector(Selector=Source.Transform)
    -> Bonsai.Simulation.Assets.ConvertTransform
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it.ExtractTranslation() as position,
        it.ExtractRotation(true) as orientation,
        it.ExtractScale() as scale)
    -> ReplaySubject Transform(BufferSize=1) => #18
    SubscribeSubject World => #6
    #18, #6 -> CombineLatest
    -> InputMapping
      Selector=Source.Item2
      Position(selector="Source.Item1.position.X,Source.Item1.position.Y,Source.Item1.position.Z")
      Orientation(selector="Source.Item1.orientation.W,Source.Item1.orientation.X,Source.Item1.orientation.Y,Source.Item1.orientation.Z")
    -> Bonsai.Physics.CreateBody(Position(X=0, Y=0, Z=0.5), Orientation(W=0.70710676908493042, X=0.70710676908493042, Y=0, Z=0), Kinematic=false) => #9
    Bonsai.Shaders.WindowClosed => #8
    SubscribeSubject Space => #13
    SubscribeSubject Node => #14
    SubscribeSubject Transform
    -> Bonsai.Scripting.ExpressionTransform => #24
      Expression:
        new(
        scale.X * 2 as LengthX,
        scale.Y * 2 as LengthY,
        scale.Z * 2 as LengthZ)
    #9, #24 -> Zip
    -> InputMapping(Selector=Source.Item1, LengthX(selector=Source.Item2.LengthX), LengthY(selector=Source.Item2.LengthY), LengthZ(selector=Source.Item2.LengthZ))
    -> Bonsai.Physics.CreateBoxMass(LengthX=0.9999995231628418, LengthY=0.9999995231628418, LengthZ=2, Density=1)
    -> Sink Draw => #4
        WorkflowInput Source1
        -> Bonsai.Physics.BodyTransform => #5
        SubscribeSubject Transform
        -> MemberSelector(Selector=Source.scale)
        -> InputMapping(X(selector=Source.X), Y(selector=Source.Y), Z(selector=Source.Z))
        -> Bonsai.Shaders.CreateScale(X=0.499999762, Y=0.499999762, Z=1) => #9
        #9, #5 -> CombineLatest
        -> Multiply
        -> Sink UpdateMVP
            SubscribeSubject ViewProj => #3
            WorkflowInput Source1 => #4
            #4, #3 -> CombineLatest
            -> Multiply
            -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=Render)
            -> WorkflowOutput
        -> Sink UpdateMV
            SubscribeSubject View => #3
            WorkflowInput Source1 => #4
            #4, #3 -> CombineLatest
            -> Multiply
            -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=Render)
            -> WorkflowOutput
        -> Bonsai.Shaders.DrawShader(ShaderName=Render, MeshName=Cube)
        -> WorkflowOutput
    SubscribeSubject Transform
    -> Bonsai.Scripting.ExpressionTransform => #25
      Expression:
        new(
        scale.X * 2 as LengthX,
        scale.Y * 2 as LengthY,
        scale.Z * 2 as LengthZ)
    #4, #25 -> Zip
    -> InputMapping(Selector=Source.Item1, LengthX(selector=Source.Item2.LengthX), LengthY(selector=Source.Item2.LengthY), LengthZ(selector=Source.Item2.LengthZ)) => #26
    #26, #13 -> Bonsai.Physics.Collision.CreateBox => #2
      Enabled=true
      CategoryBits=nil
      CollideBits=nil
      Material=Rock
      Position=nil
      Orientation=nil
      LengthX=0.9999995231628418
      LengthY=0.9999995231628418
      LengthZ=2
    #2, #8 -> TakeUntil => #7
    #7, #14 -> CombineLatest
    -> WorkflowOutput
-> ReplaySubject Objects(BufferSize=nil)
#21 -> Condition JointNodes
    WorkflowInput Source1 => #1
    -> MemberSelector(Selector=Source.Name)
    -> Bonsai.Scripting.ExpressionTransform => #7
      Expression: it.Contains(".")
    #1 -> MemberSelector(Selector=Source.Parent)
    -> Bonsai.Scripting.ExpressionTransform => #6
      Expression: it != null
    Source3=#6, Source4=#7 -> Zip
    -> LogicalAnd
    -> WorkflowOutput
-> NestedWorkflow CreateJoint
    WorkflowInput Source1 => #0
    -> Condition Hinge
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.StartsWith("L.")
        -> WorkflowOutput
    -> SelectMany CreateHinge => #2
        WorkflowInput Source1
        -> ReplaySubject Node(BufferSize=1)
        -> MemberSelector(Selector=Source.Transform)
        -> Bonsai.Simulation.Assets.ConvertTransform
        -> Bonsai.Physics.CreateAxisAnchor(Axis(X=0, Y=0, Z=1), Anchor(X=0, Y=0, Z=0)) => #6
        SubscribeSubject Objects => #2
        -> Condition Object1
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.Item2.Name) => #2
            SubscribeSubject Node
            -> Bonsai.Scripting.ExpressionTransform => #4
              Expression:
                Name.Substring(
                  Name.IndexOf('.')+1,
                  Name.IndexOf('-')-Name.IndexOf('.')-1)
            #2, #4 -> CombineLatest
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1.Body) => #4
        #6, #4 -> CombineLatest
        -> InputMapping(Selector=Source.Item2, Anchor(selector=Source.Item1.Anchor), Axis(selector=Source.Item1.Axis)) => #11
        #2 -> NestedWorkflow Object2OrWorld => #12
            WorkflowInput Source1
            -> Condition Object2
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Item2.Name) => #2
                SubscribeSubject Node
                -> Bonsai.Scripting.ExpressionTransform => #4
                  Expression:
                    Name.Substring(
                      Name.IndexOf('-')+1,
                      Name.Length-Name.IndexOf('-')-1)
                #2, #4 -> CombineLatest
                -> Equal
                -> WorkflowOutput
            -> MemberSelector(Selector=Source.Item1.Body) => #1
            SubscribeSubject Node
            -> Condition World => #6
                WorkflowInput Source1
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    Name.Substring(
                      Name.IndexOf('-')+1,
                      Name.Length-Name.IndexOf('-')-1)
                -> Equal(Operand=StringProperty(Value=World))
                -> WorkflowOutput
            #1, #6 -> TakeUntil
            -> FirstOrDefault
            -> WorkflowOutput
        Bonsai.Shaders.WindowClosed => #8
        ExternalizedPropertyOfLimitMotorParametersCreateHinge LimitMotor(MemberName=LimitMotor, Value(Bounce=0, Cfm=nil, FudgeFactor=1, HighStop=INF, LowStop=-INF, MaxForce=0, StopCfm=nil, StopErp=nil, Velocity=0)) => #15
        #11, #12, #15 -> Bonsai.Physics.Joints.CreateHinge => #13
          Axis(X=1, Y=0, Z=-4.3711388286737929E-08)
          Anchor(X=0, Y=0, Z=1)
          LimitMotor(Bounce=0, Cfm=nil, FudgeFactor=1, HighStop=INF, LowStop=-INF, MaxForce=0, StopCfm=nil, StopErp=nil, Velocity=0)
        #13, #8 -> TakeUntil
        -> WorkflowOutput
    #0 -> Condition Fixed
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Name.StartsWith("F.")
        -> WorkflowOutput
    -> SelectMany CreateHinge
        WorkflowInput Source1
        -> ReplaySubject Node(BufferSize=1)
        -> MemberSelector(Selector=Source.Transform)
        -> Bonsai.Simulation.Assets.ConvertTransform
        -> Bonsai.Physics.CreateAxisAnchor(Axis(X=0, Y=0, Z=1), Anchor(X=0, Y=0, Z=0)) => #6
        SubscribeSubject Objects => #2
        -> Condition Object1
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.Item2.Name) => #2
            SubscribeSubject Node
            -> Bonsai.Scripting.ExpressionTransform => #4
              Expression:
                Name.Substring(
                  Name.IndexOf('.')+1,
                  Name.IndexOf('-')-Name.IndexOf('.')-1)
            #2, #4 -> CombineLatest
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Item1.Body) => #4
        #6, #4 -> CombineLatest
        -> InputMapping(Selector=Source.Item2, Anchor(selector=Source.Item1.Anchor), Axis(selector=Source.Item1.Axis)) => #11
        #2 -> NestedWorkflow Object2OrWorld => #12
            WorkflowInput Source1
            -> Condition Object2
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Item2.Name) => #2
                SubscribeSubject Node
                -> Bonsai.Scripting.ExpressionTransform => #4
                  Expression:
                    Name.Substring(
                      Name.IndexOf('-')+1,
                      Name.Length-Name.IndexOf('-')-1)
                #2, #4 -> CombineLatest
                -> Equal
                -> WorkflowOutput
            -> MemberSelector(Selector=Source.Item1.Body) => #1
            SubscribeSubject Node
            -> Condition World => #6
                WorkflowInput Source1
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    Name.Substring(
                      Name.IndexOf('-')+1,
                      Name.Length-Name.IndexOf('-')-1)
                -> Equal(Operand=StringProperty(Value=World))
                -> WorkflowOutput
            #1, #6 -> TakeUntil
            -> FirstOrDefault
            -> WorkflowOutput
        Bonsai.Shaders.WindowClosed => #8
        ExternalizedPropertyOfLimitMotorParametersCreateHinge LimitMotor(MemberName=LimitMotor, Value(Bounce=0, Cfm=nil, FudgeFactor=1, HighStop=0, LowStop=0, MaxForce=0, StopCfm=nil, StopErp=nil, Velocity=0)) => #15
        #11, #12, #15 -> Bonsai.Physics.Joints.CreateHinge => #13
          Axis(X=1, Y=0, Z=-4.3711388286737929E-08)
          Anchor(X=0, Y=0, Z=0)
          LimitMotor(Bounce=0, Cfm=nil, FudgeFactor=1, HighStop=0, LowStop=0, MaxForce=0, StopCfm=nil, StopErp=nil, Velocity=0)
        #13, #8 -> TakeUntil
        -> WorkflowOutput
    -> IgnoreElements => #7
    #2, #7 -> Merge
    -> WorkflowOutput
-> ReplaySubject Joints(BufferSize=nil)

Bonsai.Shaders.Timer(DueTime=PT0S)
-> SelectMany Ray
    WorkflowInput Source1

    SubscribeSubject Space
    -> Bonsai.Physics.Collision.CreateRay(Enabled=false, CategoryBits=nil, CollideBits=nil, Material=Ray, Position=nil, Orientation=nil, Length=1000) => #3
    SubscribeSubject View
    -> MemberSelector => #4
    Bonsai.Shaders.Input.MouseMove
    -> MemberSelector => #9
    SubscribeSubject Projection
    -> MemberSelector => #7
    #9, #4, #7, #3 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform => #12
      Script:
        import clr
        clr.AddReference("OpenTK")
        clr.AddReference("Ode.Net")
        from OpenTK import Matrix4, Vector3, Vector4, Quaternion
        from Ode.Net import Vector3 as Vec3, Quaternion as Quat
        from System import Tuple

        @returns(Tuple[Vector4,Vector4])
        def process(value):
          window = value.Item1.Sender
          position = value.Item1.EventArgs.Position

          #iviewproj = value.Item2
          iview = value.Item2.Inverted()
          iproj = value.Item3.Inverted()
          cpos = iview.ExtractTranslation()

          x = (position.X / float(window.Width)) * 2 - 1
          y = 1 - (position.Y / float(window.Height)) * 2

          # Compute direction vector in world space
          clip = Vector4(x,y,-1,1)
          eye = Vector4.Transform(clip, iproj)
          eye = Vector4(eye.X,eye.Y,-1,0)
          direction = Vector4.Transform(eye, iview)
          direction.Normalize()

          # Compute two points in clip space
          #near = Vector3(x,y,0)
          #far = Vector3(x,y,-1)
          #near = Vector3.Transform(near, iviewproj)
          #far = Vector3.Transform(far, iviewproj)
          #direction = Vector3.Normalize(far - near)

          ray = value.Item4
          #ray.Position = Vec3(near.X,near.Y,near.Z)
          #ray.Position = Vec3(14,0,0)
          ray.Position = Vec3(cpos.X,cpos.Y,cpos.Z)
          ray.Direction = Vec3(direction.X,direction.Y,direction.Z)
          ray.Enabled = True
          #return Tuple.Create(near, direction)
          return Tuple.Create(direction, direction)
    Bonsai.Shaders.WindowClosed => #13
    #12, #13 -> TakeUntil
    -> WorkflowOutput
